# Generated by Configurator on Sat Oct 19 18:04:24 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TIDiaShutter,NikonTI,TIDiaShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,QuantEM,PVCAM,Camera-1
Device,Wheel-A,SutterLambda,Wheel-A
Device,Wheel-B,SutterLambda,Wheel-B
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Wheel-C,SutterLambda,Wheel-C
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,COM1,AnswerTimeout,2000.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,9600
Property,COM2,DataBits,8
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Fast USB to Serial,Disable
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Wheel-A,Port,COM1
Property,Wheel-A,Timeout(ms),500
Property,Wheel-B,Port,COM1
Property,Wheel-B,Timeout(ms),500
Property,Shutter-A,Port,COM1
Property,Shutter-B,Port,COM1
Property,Wheel-C,Port,COM1
Property,Wheel-C,Timeout(ms),500
Property,XYStage,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TIDiaShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,QuantEM
Property,Core,Shutter,Shutter-A
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Fluor 40x NA 0.75 Dry
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Plan Apo 100x NA 1.45 Oil
Label,TINosePiece,2,3-Plan Fluor 40x NA 1.30 Oil
Label,TINosePiece,1,2-Plan 20x NA 0.40 Dry
Label,TINosePiece,0,1-Plan 10x NA 0.25 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-TxRed
Label,TIFilterBlock1,4,5-GFPHQ
Label,TIFilterBlock1,3,4-TRITC
Label,TIFilterBlock1,2,3-L-590
Label,TIFilterBlock1,1,2-L-455
Label,TIFilterBlock1,0,1-ANALY
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Wheel-A
Label,Wheel-A,9,760/20
Label,Wheel-A,8,470/30
Label,Wheel-A,7,580/20
Label,Wheel-A,6,515/10
Label,Wheel-A,5,open
Label,Wheel-A,4,495/10
Label,Wheel-A,3,660/20
Label,Wheel-A,2,546/11
Label,Wheel-A,1,630/30
Label,Wheel-A,0,420/40
# Wheel-B
Label,Wheel-B,9,open
Label,Wheel-B,8,closed
Label,Wheel-B,7,630/30
Label,Wheel-B,6,700/75
Label,Wheel-B,5,650/100
Label,Wheel-B,4,630/20
Label,Wheel-B,3,575/20
Label,Wheel-B,2,open
Label,Wheel-B,1,535/30
Label,Wheel-B,0,480/40
# Wheel-C
Label,Wheel-C,9,Filter-9
Label,Wheel-C,8,Filter-8
Label,Wheel-C,7,Filter-7
Label,Wheel-C,6,Filter-6
Label,Wheel-C,5,Filter-5
Label,Wheel-C,4,Open
Label,Wheel-C,3,ND0.5
Label,Wheel-C,2,ND1.0
Label,Wheel-C,1,ND2.0
Label,Wheel-C,0,Open

# Configuration presets
# Group: Magnification
# Preset: 6-Plan Fluor 40x NA 0.75 Dry
ConfigGroup,Magnification,6-Plan Fluor 40x NA 0.75 Dry,TINosePiece,Label,6-Plan Fluor 40x NA 0.75 Dry

# Preset: 3-Plan Fluor 40x NA 1.30 Oil
ConfigGroup,Magnification,3-Plan Fluor 40x NA 1.30 Oil,TINosePiece,Label,3-Plan Fluor 40x NA 1.30 Oil

# Preset: 5-Unknown
ConfigGroup,Magnification,5-Unknown,TINosePiece,Label,5-Unknown

# Preset: 2-Plan 20x NA 0.40 Dry
ConfigGroup,Magnification,2-Plan 20x NA 0.40 Dry,TINosePiece,Label,2-Plan 20x NA 0.40 Dry

# Preset: 1-Plan 10x NA 0.25 Dry
ConfigGroup,Magnification,1-Plan 10x NA 0.25 Dry,TINosePiece,Label,1-Plan 10x NA 0.25 Dry

# Preset: 4-Plan Apo 100x NA 1.45 Oil
ConfigGroup,Magnification,4-Plan Apo 100x NA 1.45 Oil,TINosePiece,Label,4-Plan Apo 100x NA 1.45 Oil


# Group: Channel
# Preset: None
ConfigGroup,Channel,None,TIFilterBlock1,Label,5-GFPHQ
ConfigGroup,Channel,None,Wheel-A,Label,470/30
ConfigGroup,Channel,None,Wheel-B,Label,closed
ConfigGroup,Channel,None,Shutter-A,State,0
ConfigGroup,Channel,None,Shutter-B,State,0
ConfigGroup,Channel,None,Core,AutoShutter,0
ConfigGroup,Channel,None,Core,Shutter,

# Preset: LSSmO
ConfigGroup,Channel,LSSmO,TIFilterBlock1,Label,2-L-455
ConfigGroup,Channel,LSSmO,Wheel-A,Label,420/40
ConfigGroup,Channel,LSSmO,Wheel-B,Label,575/20
ConfigGroup,Channel,LSSmO,Shutter-A,State,0
ConfigGroup,Channel,LSSmO,Shutter-B,State,0
ConfigGroup,Channel,LSSmO,Core,AutoShutter,1
ConfigGroup,Channel,LSSmO,Core,Shutter,Shutter-A

# Preset: DIC
ConfigGroup,Channel,DIC,TIFilterBlock1,Label,1-ANALY
ConfigGroup,Channel,DIC,Wheel-A,Label,open
ConfigGroup,Channel,DIC,Wheel-B,Label,650/100
ConfigGroup,Channel,DIC,Shutter-A,State,0
ConfigGroup,Channel,DIC,Shutter-B,State,0
ConfigGroup,Channel,DIC,Core,AutoShutter,1
ConfigGroup,Channel,DIC,Core,Shutter,TIDiaShutter

# Preset: YFP
ConfigGroup,Channel,YFP,TIFilterBlock1,Label,3-L-590
ConfigGroup,Channel,YFP,Wheel-A,Label,515/10
ConfigGroup,Channel,YFP,Wheel-B,Label,575/20
ConfigGroup,Channel,YFP,Shutter-A,State,0
ConfigGroup,Channel,YFP,Shutter-B,State,0
ConfigGroup,Channel,YFP,Core,AutoShutter,1
ConfigGroup,Channel,YFP,Core,Shutter,Shutter-A

# Preset: Blue-Light
ConfigGroup,Channel,Blue-Light,TIFilterBlock1,Label,5-GFPHQ
ConfigGroup,Channel,Blue-Light,Wheel-A,Label,470/30
ConfigGroup,Channel,Blue-Light,Wheel-B,Label,closed
ConfigGroup,Channel,Blue-Light,Shutter-A,State,1
ConfigGroup,Channel,Blue-Light,Shutter-B,State,0
ConfigGroup,Channel,Blue-Light,Core,AutoShutter,0
ConfigGroup,Channel,Blue-Light,Core,Shutter,Shutter-A

# Preset: GFP
ConfigGroup,Channel,GFP,TIFilterBlock1,Label,5-GFPHQ
ConfigGroup,Channel,GFP,Wheel-A,Label,open
ConfigGroup,Channel,GFP,Wheel-B,Label,650/100
ConfigGroup,Channel,GFP,Shutter-A,State,0
ConfigGroup,Channel,GFP,Shutter-B,State,0
ConfigGroup,Channel,GFP,Core,AutoShutter,1
ConfigGroup,Channel,GFP,Core,Shutter,Shutter-A

# Preset: CY FRET
ConfigGroup,Channel,CY FRET,TIFilterBlock1,Label,2-L-455
ConfigGroup,Channel,CY FRET,Wheel-A,Label,420/40
ConfigGroup,Channel,CY FRET,Wheel-B,Label,535/30
ConfigGroup,Channel,CY FRET,Shutter-A,State,0
ConfigGroup,Channel,CY FRET,Shutter-B,State,0
ConfigGroup,Channel,CY FRET,Core,AutoShutter,1
ConfigGroup,Channel,CY FRET,Core,Shutter,Shutter-A

# Preset: DEVD FRET
ConfigGroup,Channel,DEVD FRET,TIFilterBlock1,Label,2-L-455
ConfigGroup,Channel,DEVD FRET,Wheel-A,Label,420/40
ConfigGroup,Channel,DEVD FRET,Wheel-B,Label,650/100
ConfigGroup,Channel,DEVD FRET,Shutter-A,State,0
ConfigGroup,Channel,DEVD FRET,Shutter-B,State,0
ConfigGroup,Channel,DEVD FRET,Core,AutoShutter,1
ConfigGroup,Channel,DEVD FRET,Core,Shutter,Shutter-A

# Preset: TxRed
ConfigGroup,Channel,TxRed,TIFilterBlock1,Label,6-TxRed
ConfigGroup,Channel,TxRed,Wheel-A,Label,open
ConfigGroup,Channel,TxRed,Wheel-B,Label,open
ConfigGroup,Channel,TxRed,Shutter-A,State,0
ConfigGroup,Channel,TxRed,Shutter-B,State,0
ConfigGroup,Channel,TxRed,Core,AutoShutter,1
ConfigGroup,Channel,TxRed,Core,Shutter,Shutter-A

# Preset: CFP
ConfigGroup,Channel,CFP,TIFilterBlock1,Label,2-L-455
ConfigGroup,Channel,CFP,Wheel-A,Label,420/40
ConfigGroup,Channel,CFP,Wheel-B,Label,480/40
ConfigGroup,Channel,CFP,Shutter-A,State,0
ConfigGroup,Channel,CFP,Shutter-B,State,0
ConfigGroup,Channel,CFP,Core,AutoShutter,1
ConfigGroup,Channel,CFP,Core,Shutter,Shutter-A

# Preset: mCherry
ConfigGroup,Channel,mCherry,TIFilterBlock1,Label,3-L-590
ConfigGroup,Channel,mCherry,Wheel-A,Label,580/20
ConfigGroup,Channel,mCherry,Wheel-B,Label,650/100
ConfigGroup,Channel,mCherry,Shutter-A,State,0
ConfigGroup,Channel,mCherry,Shutter-B,State,0
ConfigGroup,Channel,mCherry,Core,AutoShutter,1
ConfigGroup,Channel,mCherry,Core,Shutter,Shutter-A


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TILightPath,Label,2-Left100
ConfigGroup,System,Startup,QuantEM,Exposure,200.0000
ConfigGroup,System,Startup,Wheel-C,Label,Open


# Group: LightPath
# Preset: 2-Left100
ConfigGroup,LightPath,2-Left100,TILightPath,Label,2-Left100

# Preset: 3-Right100
ConfigGroup,LightPath,3-Right100,TILightPath,Label,3-Right100

# Preset: 1-Eye100
ConfigGroup,LightPath,1-Eye100,TILightPath,Label,1-Eye100

# Preset: 4-Left80
ConfigGroup,LightPath,4-Left80,TILightPath,Label,4-Left80


# Group: ND
# Preset: 32%
ConfigGroup,ND,32%,Wheel-C,Label,ND0.5

# Preset: 1%
ConfigGroup,ND,1%,Wheel-C,Label,ND2.0

# Preset: 10%
ConfigGroup,ND,10%,Wheel-C,Label,ND1.0

# Preset: 100%
ConfigGroup,ND,100%,Wheel-C,Label,Open

# Preset: Filter-9
ConfigGroup,ND,Filter-9,Wheel-C,Label,Filter-9

# Preset: Filter-8
ConfigGroup,ND,Filter-8,Wheel-C,Label,Filter-8

# Preset: Filter-7
ConfigGroup,ND,Filter-7,Wheel-C,Label,Filter-7

# Preset: Filter-6
ConfigGroup,ND,Filter-6,Wheel-C,Label,Filter-6

# Preset: Filter-5
ConfigGroup,ND,Filter-5,Wheel-C,Label,Filter-5



# PixelSize settings

